PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 700]
  expName = Lab5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Book4.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('study_word', 'book')]),
      OrderedDict([('study_word', 'cushion')]),
      OrderedDict([('study_word', 'phone')]),
      OrderedDict([('study_word', 'marble')]),
      OrderedDict([('study_word', 'board ')]),
      OrderedDict([('study_word', 'laptop')]),
      OrderedDict([('study_word', 'chart')]),
      OrderedDict([('study_word', 'tshirt')]),
      OrderedDict([('study_word', 'mouse')]),
      OrderedDict([('study_word', 'pastry')]),
      OrderedDict([('study_word', 'case')]),
      OrderedDict([('study_word', 'cruise')]),
      OrderedDict([('study_word', 'police keys')]),
      OrderedDict([('study_word', 'poster')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Book5.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('test', '_a_e')]),
      OrderedDict([('test', 't_g_r')]),
      OrderedDict([('test', '_oo_')]),
      OrderedDict([('test', 'c_s_h_o_n')]),
      OrderedDict([('test', '_ia_n_')]),
      OrderedDict([('test', '_ea_o_')]),
      OrderedDict([('test', 'c_m_r_')]),
      OrderedDict([('test', '_p_a_d_')]),
      OrderedDict([('test', '_o_s_')]),
      OrderedDict([('test', 'o_a_n_e')]),
      OrderedDict([('test', 'l_pt_p')]),
      OrderedDict([('test', '_ha_t')]),
      OrderedDict([('test', 't_hi_t')]),
      OrderedDict([('test', '_ou_se')]),
      OrderedDict([('test', 'p_as_tr_')]),
      OrderedDict([('test', 'c_s_')]),
      OrderedDict([('test', '_ru_is_')]),
      OrderedDict([('test', '_o_rd')]),
      OrderedDict([('test', '_ho_e')]),
      OrderedDict([('test', 'p_li_e')]),
      OrderedDict([('test', '_a_bl_')]),
      OrderedDict([('test', 't_bl_')]),
      OrderedDict([('test', 'v_s_')]),
      OrderedDict([('test', 'p_nc_l')]),
      OrderedDict([('test', 'bo_t_e')]),
      OrderedDict([('test', 't_ai_s')]),
      OrderedDict([('test', '_e_ea_')]),
      OrderedDict([('test', 'a_p_e')]),
      OrderedDict([('test', 'b_na_a')]),
      OrderedDict([('test', '_ha_g_r')]),
      OrderedDict([('test', '_oa_')]),
      OrderedDict([('test', 'p_n_s')]),
      OrderedDict([('test', 's_ho_l')]),
      OrderedDict([('test', '_to_e')]),
      OrderedDict([('test', 'c_ea_')]),
      OrderedDict([('test', 'c_al_')]),
      OrderedDict([('test', 'd_es_')]),
      OrderedDict([('test', '_ar_e_')]),
      OrderedDict([('test', 's_i_')]),
      OrderedDict([('test', 'c_f_e_')])]
    Routine test
  LoopTerminator trials_2
